PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = Relational Task
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Routines
  Routine ITI_match
    TextComponent match_ITI
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = Blank
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  Routine block1
    ImageComponent block1_match
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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    KeyboardComponent block1_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      storeCorrect = True
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    ImageComponent block1_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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  Routine block2
    ImageComponent block2_change
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent block2_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent block2_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine ITI_change
    TextComponent change_ITI
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Blank
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  Routine shape_title
    ImageComponent shape_name
      image = images/matchshape.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine change_title
    ImageComponent change_name
      image = images/matchchange.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine block3
    ImageComponent block3_match
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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    KeyboardComponent block3_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      storeCorrect = True
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    ImageComponent block3_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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  Routine block4
    ImageComponent block4_change
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent block4_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent block4_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine block5
    ImageComponent block5_match
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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    KeyboardComponent block5_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      storeCorrect = True
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    ImageComponent block5_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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  Routine block6
    ImageComponent block6_change
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent block6_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent block6_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine block7
    ImageComponent block7_match
      image [set every repeat] = $imgpath
      pos = (0, 150)
      size = (450,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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    KeyboardComponent block7_response
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      storeCorrect = True
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    ImageComponent block7_buttons
      image = images/buttons.png
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
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  Routine block8
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  Routine end
    TextComponent bye
      color = black
      letterHeight = 35
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine instructions
    ImageComponent image
      image [set every repeat] = $imgpath
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2','9'
      correctAns = $corrans
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if len(key_resp.keys) > 0:
            if key_resp.keys[0] == str(corrans):
                continueRoutine = False
            else:
                incorrect.opacity = 1
    ImageComponent incorrect
      image = images/practice-incorrect.jpg
      opacity [set every repeat] = 0
      pos = (0, -350)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/instr1.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/instr2.jpg'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/instr3.jpg'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/instr4.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/practice_shape_no.png'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/practice_shape_yes.png'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/practice_shape_yes2.png'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/practice_tex_no.png'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/practice_tex_yes.png'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/practice_tex_yes2.png'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/instr5.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/instr6.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/instr7.jpg'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/instr8.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/instr9.jpg'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/instr10.jpg'), ('corrans', 'return')]),
      OrderedDict([('imgpath', 'images/practice2_shape_no.bmp'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/practice2_shape_no2.bmp'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/practice2_shape_yes.bmp'), ('corrans', 1)]),
      OrderedDict([('imgpath', 'images/practice2_tex_no.bmp'), ('corrans', 2)]),
      OrderedDict([('imgpath', 'images/practice2_tex_yes.bmp'), ('corrans', 1)])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
    Routine instructions
  LoopTerminator trials
  Routine shape_title
  LoopInitiator block1_trials loopType="TrialHandler"
    conditionsFile = block1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/shape_yes7.png')]),
      OrderedDict([('imgpath', 'images/tex_no6.png')]),
      OrderedDict([('imgpath', 'images/tex_yes1.png')]),
      OrderedDict([('imgpath', 'images/shape_yes8.png')]),
      OrderedDict([('imgpath', 'images/tex_no1.png')]),
      OrderedDict([('imgpath', 'images/shape_no5.png')]),
      OrderedDict([('imgpath', 'images/shape_yes5.png')]),
      OrderedDict([('imgpath', 'images/tex_yes5.png')])]
    Routine block1
    Routine ITI_match
  LoopTerminator block1_trials
  Routine change_title
  LoopInitiator block2_trials loopType="TrialHandler"
    conditionsFile = block2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/change_shape_no1.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no3.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no1.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes6.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes5.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes4.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes1.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no2.bmp')])]
    Routine block2
    Routine ITI_change
  LoopTerminator block2_trials
  Routine shape_title
  LoopInitiator block3_trials loopType="TrialHandler"
    conditionsFile = block3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/shape_no3.png')]),
      OrderedDict([('imgpath', 'images/shape_no1.png')]),
      OrderedDict([('imgpath', 'images/shape_no2.png')]),
      OrderedDict([('imgpath', 'images/tex_yes3.png')]),
      OrderedDict([('imgpath', 'images/shape_no7.png')]),
      OrderedDict([('imgpath', 'images/tex_yes2.png')]),
      OrderedDict([('imgpath', 'images/tex_yes8.png')]),
      OrderedDict([('imgpath', 'images/tex_yes7.png')])]
    Routine block3
    Routine ITI_match
  LoopTerminator block3_trials
  Routine change_title
  LoopInitiator block4_trials loopType="TrialHandler"
    conditionsFile = block4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/change_tex_yes7.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes3.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no6.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes2.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no7.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes4.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no4.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no2.bmp')])]
    Routine block4
    Routine ITI_change
  LoopTerminator block4_trials
  Routine shape_title
  LoopInitiator block5_trials loopType="TrialHandler"
    conditionsFile = block5.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/shape_yes1.png')]),
      OrderedDict([('imgpath', 'images/tex_no2.png')]),
      OrderedDict([('imgpath', 'images/shape_yes6.png')]),
      OrderedDict([('imgpath', 'images/tex_no3.png')]),
      OrderedDict([('imgpath', 'images/shape_yes4.png')]),
      OrderedDict([('imgpath', 'images/tex_no4.png')]),
      OrderedDict([('imgpath', 'images/tex_no8.png')]),
      OrderedDict([('imgpath', 'images/shape_yes3.png')])]
    Routine block5
    Routine ITI_match
  LoopTerminator block5_trials
  Routine change_title
  LoopInitiator block6_trials loopType="TrialHandler"
    conditionsFile = block6.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/change_tex_yes2.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes8.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no6.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes8.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no8.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_yes1.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes5.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes3.bmp')])]
    Routine block6
    Routine ITI_change
  LoopTerminator block6_trials
  Routine shape_title
  LoopInitiator block7_trials loopType="TrialHandler"
    conditionsFile = block7.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/tex_yes4.png')]),
      OrderedDict([('imgpath', 'images/shape_no6.png')]),
      OrderedDict([('imgpath', 'images/shape_no8.png')]),
      OrderedDict([('imgpath', 'images/shape_yes2.png')]),
      OrderedDict([('imgpath', 'images/tex_no7.png')]),
      OrderedDict([('imgpath', 'images/shape_no4.png')]),
      OrderedDict([('imgpath', 'images/tex_yes6.png')]),
      OrderedDict([('imgpath', 'images/tex_no5.png')])]
    Routine block7
    Routine ITI_match
  LoopTerminator block7_trials
  Routine change_title
  LoopInitiator block8_trials loopType="TrialHandler"
    conditionsFile = block8.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/change_tex_no8.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no7.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no4.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes6.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no5.bmp')]),
      OrderedDict([('imgpath', 'images/change_tex_no3.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_yes7.bmp')]),
      OrderedDict([('imgpath', 'images/change_shape_no5.bmp')])]
    Routine block8
    Routine ITI_change
  LoopTerminator block8_trials
  Routine end
